PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial_1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Stim 1: " + str(stim_1)
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Stim 2: " + str(stim_2)
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        loop1Reps += 9
        loop2Reps += 1
  Routine Create
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        loop1Reps = 0
        loop2Reps = 0
  Routine routine_123
  Routine ad
    ImageComponent image_2
      image [set every repeat] = C:/Users/chenb/Desktop/saraalkhayarin/Flow.png
      pos [set every repeat] = [stim_1, stim_1]
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Create
  LoopInitiator loop_2 loopType="TrialHandler"
    Selected rows = $str(loop2Reps)+":"+str(loop2Reps+5)
    conditionsFile = loopTemplate2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_2': 1},
      {'stim_2': 2},
      {'stim_2': 3},
      {'stim_2': 4},
      {'stim_2': 5},
      {'stim_2': 6},
      {'stim_2': 7},
      {'stim_2': 8},
      {'stim_2': 9},
      {'stim_2': 10}]
    LoopInitiator loop_1 loopType="TrialHandler"
      Selected rows = $str(loop1Reps)+":"+str(loop1Reps+9)
      conditionsFile = loopTemplate1.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'stim_1': 1},
        {'stim_1': 2},
        {'stim_1': 3},
        {'stim_1': 4},
        {'stim_1': 5},
        {'stim_1': 6},
        {'stim_1': 7},
        {'stim_1': 8},
        {'stim_1': 9},
        {'stim_1': 10},
        {'stim_1': 11},
        {'stim_1': 12},
        {'stim_1': 13},
        {'stim_1': 14},
        {'stim_1': 15},
        {'stim_1': 16},
        {'stim_1': 17},
        {'stim_1': 18},
        {'stim_1': 19},
        {'stim_1': 20},
        {'stim_1': 21},
        {'stim_1': 22},
        {'stim_1': 23},
        {'stim_1': 24},
        {'stim_1': 25},
        {'stim_1': 26},
        {'stim_1': 27},
        {'stim_1': 28},
        {'stim_1': 29},
        {'stim_1': 30},
        {'stim_1': 31},
        {'stim_1': 32},
        {'stim_1': 33},
        {'stim_1': 34},
        {'stim_1': 35},
        {'stim_1': 36},
        {'stim_1': 37},
        {'stim_1': 38},
        {'stim_1': 39},
        {'stim_1': 40},
        {'stim_1': 41},
        {'stim_1': 42},
        {'stim_1': 43},
        {'stim_1': 44},
        {'stim_1': 45},
        {'stim_1': 46},
        {'stim_1': 47},
        {'stim_1': 48},
        {'stim_1': 49},
        {'stim_1': 50},
        {'stim_1': 51},
        {'stim_1': 52},
        {'stim_1': 53},
        {'stim_1': 54},
        {'stim_1': 55},
        {'stim_1': 56},
        {'stim_1': 57},
        {'stim_1': 58},
        {'stim_1': 59},
        {'stim_1': 60},
        {'stim_1': 61},
        {'stim_1': 62},
        {'stim_1': 63},
        {'stim_1': 64},
        {'stim_1': 65},
        {'stim_1': 66},
        {'stim_1': 67},
        {'stim_1': 68},
        {'stim_1': 69},
        {'stim_1': 70},
        {'stim_1': 71},
        {'stim_1': 72},
        {'stim_1': 73},
        {'stim_1': 74},
        {'stim_1': 75},
        {'stim_1': 76},
        {'stim_1': 77},
        {'stim_1': 78},
        {'stim_1': 79},
        {'stim_1': 80},
        {'stim_1': 81},
        {'stim_1': 82},
        {'stim_1': 83},
        {'stim_1': 84},
        {'stim_1': 85},
        {'stim_1': 86},
        {'stim_1': 87},
        {'stim_1': 88},
        {'stim_1': 89},
        {'stim_1': 90},
        {'stim_1': 91},
        {'stim_1': 92},
        {'stim_1': 93},
        {'stim_1': 94},
        {'stim_1': 95},
        {'stim_1': 96},
        {'stim_1': 97},
        {'stim_1': 98},
        {'stim_1': 99},
        {'stim_1': 100},
        {'stim_1': 101},
        {'stim_1': 102},
        {'stim_1': 103},
        {'stim_1': 104},
        {'stim_1': 105},
        {'stim_1': 106},
        {'stim_1': 107}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
      Routine trial_1
    LoopTerminator loop_1
    Routine ad
    Routine trial_2
  LoopTerminator loop_2
