PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        mouseup = True
      Each Frame:
        if mouseup:
            if mouse.isPressedIn(button):
                mouseup = False

                if list(button.fillColor) == [1, -1, -1]: # RGB Value of red
                    button.fillColor = 'blue'
                else:
                    button.fillColor = 'red'

        else:
            if not 1 in mouse.getPressed():
                mouseup = True
    ButtonComponent button
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine trial
