PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1cond
  keyboardBackend = ioHub
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Routines
  Routine Intro
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        chooseExperiment = random.randint(0, 1)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Intro
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Experiment1
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if chooseExperiment:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experiment 1
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Experiment2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if not chooseExperiment:
            continueRoutine = False
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experiment 2
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Over
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Over
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine Experiment1
  Routine Experiment2
  Routine Over
