PsychoPy2experiment version="2023.1.0"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rating_last
  keyboardBackend = ioHub
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Routines
  Routine first_rating
    TextComponent rate_text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    SliderComponent rate
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent getRating
      Code Type = Auto->JS
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      Before Experiment:
        rate1Array = []
      Begin Routine:
        rate_text.text = f'Stimuli number #{loop.thisN+1}'
      End Routine:
        rate1Array.append(rate.getRating())
  Routine show_data
    TextComponent showArraies
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent maxRating
      Code Type = Auto->JS
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      Begin Routine:
        showArraies.text = max(rate1Array)
Flow
  LoopInitiator loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine first_rating
  LoopTerminator loop
  Routine show_data
