PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = pb
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        win_sum = 0
        lose_sum = 0
      Begin Routine:
        #green.startValue= win_sum
        #red.startValue = lose_sum

        polygon_green.size = (win_sum/8000, 0.1)
        polygon_red.size = (lose_sum/8000, 0.1)
    TextComponent header
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Progress Bar Example
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    ButtonComponent plus
      bold = True
      callback = win_sum += 100
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.4)
      size = [0.3, 0.15]
      startVal [time (s)] = 0
      text = +100 | Win
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    ButtonComponent minus
      bold = True
      callback = lose_sum += 100
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      size = [0.3, 0.15]
      startVal [time (s)] = 0
      text = - 100 | Lose
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    TextComponent win_lose
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(win_sum) + " Won | " + str(lose_sum) + " Lost"
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    SliderComponent green
      fillColor = white
      forceEndRoutine = False
      granularity = 100
      initVal = 0
      labels = (0, 1000, 2000, 3000, 4000, 5000, 6000, 7000, 8000)
      letterHeight = 0.03
      pos = (0, 0.1)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1000, 2000, 3000, 4000, 5000, 6000, 7000, 8000)
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    SliderComponent red
      color = 0.0000, 0.0000, 0.0000
      fillColor = white
      forceEndRoutine = False
      granularity = 100
      initVal = 0
      labels = (0, 1000, 2000, 3000, 4000, 5000, 6000, 7000, 8000)
      letterHeight = 0.03
      pos = (0, -0.15)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1000, 2000, 3000, 4000, 5000, 6000, 7000, 8000)
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    PolygonComponent polygon_green
      anchor = center-left
      fillColor = -1.0000, 0.0039, -1.0000
      pos = (-0.5, 0.1)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_red
      anchor = center-left
      fillColor = 1.0000, -1.0000, -1.0000
      pos = (-0.5, -0.15)
      shape = rectangle
      size = (1, 0.05)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine trial
  LoopTerminator trials
