PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Dinkum
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        pick = random.choice([image_black, image_green, image_red, image_blue])

        showStimuliName = pick.name
        shownStimuli = pick.image
      Each Frame:
        for image in [image_green, image_black, image_red, image_blue]:
            if image.contains(mouse):
                image.opacity = 0.5
            else:
                image.opacity = 1
      End Routine:
        if mouse.clicked_name:
            clickedStimuli = mouse.clicked_name[0]
        else:
            clickedStimuli = 'empty'
    ImageComponent shown_image
      image [set every repeat] = $shownStimuli
      size = (100, 100)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent image_black
      image = black.png
      pos = (600, -250)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent image_green
      image = green.png
      pos = (200, -250)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent image_red
      image = red.png
      pos = (-200, -250)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent image_blue
      image = blue.png
      pos = (-600, -250)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    MouseComponent mouse
      clickable = image_black, image_green, image_red, image_blue
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $f'Number Of Loop: {trials.thisN}'
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  Routine check_answer
    TextComponent answer
      color [set every repeat] = $'green' if showStimuliName==clickedStimuli else 'red'
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'Correct Answer' if showStimuliName==clickedStimuli else 'Wrong Answer'
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine check_answer
  LoopTerminator trials
