PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ("a1", "a2", "a3", "a4", "a5")
      letterHeight = 0.05
      pos = (0, -0)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        slider = visual.Slider(win, ticks=(1,2,3,4,5), labels=(image, image))
    ImageComponent image
      image = Mario.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
