PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Moonlighter
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        created = False
      Each Frame:
        currentRating = slider.getRating()

        if currentRating and not created and currentRating > 2.75 and currentRating < 3.25:
            slider.markerColor = 'green'
            created = True
Flow
  Routine trial
