PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = imageRandomization
  keyboardBackend = ioHub
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        locations = [(-0.5, 0), (0.5, 0)]
      Begin Routine:
        img.pos = random.choice(locations)
    ImageComponent img
      image = Mario.png
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trials
