PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Timer
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(2)
        mousePosition = mouse.getPos()
      Each Frame:
        text.text = timer.getTime()

        if (mousePosition != mouse.getPos()).any():
            timer.reset()
            mousePosition = mouse.getPos()

        if timer.getTime() <= 0:
            continueRoutine = False
Flow
  Routine trial
