PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = d
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        label_1 = new visual.TextStim(psychoJS.window, {"text": "uncertain", "height": 0.5});
        label_2 = new visual.TextStim(psychoJS.window, {"text": "certain", "height": 0.5});
        labels = [label_1, label_2];
        for (var label, _pj_c = 0, _pj_a = labels, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            label = _pj_a[_pj_c];
            if ((label.text === "certain")) {
                label.color = "red";
            } else {
                label.color = "green";
            }
        }
      Begin Routine:
        label_1 = visual.TextStim(win, text="uncertain", height=0.5)
        label_2 = visual.TextStim(win, text="certain", height=0.5)
        labels = [label_1, label_2]

        for label in labels:
            if label.text == ’certain’:
                label.color = ’red’
            else:
                label.color = ’green’
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent label_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent label_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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Flow
  Routine trial
