PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = C:/Users/chenb/Desktop/Alon/i n/3.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        movie.metadata.frameRate = 1
Flow
  Routine trial
