PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.2
  Window size (pixels) = [1920, 1080]
  expName = prevent-empty-rating
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if slider.getRating():
            if 'space' in key_resp.getKeys():
                 continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press 'space' to end the routine.

        Pressing 'space' without chooseing a rating won't end the routine.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine trial
