PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Randomized Fixation Cross
  keyboardBackend = ioHub
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Routines
  Routine feedback
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"Fixation Time: " + str(fixationTime) + " seconds."
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  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixationTime
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        fixationOptions = [1, 3]
      Begin Routine:
        fixationTime = random.choice(fixationOptions)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine feedback
  LoopTerminator trials
