PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rsitsr
  keyboardBackend = ioHub
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'r'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #import pygame



        #
        #pygame.init()
        #pygame.mixer.init()
        #pygame.display.set_mode()
        #
        #
        #s = 'sound'
        #
        #mySound = pygame.mixer.Sound('sound.wav')
        #
      Begin Routine:
        kb = keyboard.Keyboard()
      Each Frame:
        #if 'r' in key_resp.keys:
        #    pygame.mixer.Sound.play(mySound)
        #    print('test')


        keys = kb.getKeys()

        for thisKey in keys:
            if thisKey == 'r':
                print('r')
Flow
  Routine trial
