PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rs
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        play_sound = False
      End Routine:
        if 'r' in key_resp.keys:
            trials.finished = False
        else:
            trials.finished = True
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SoundComponent sound_1
      sound = Par1.wav
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Finished!
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Flow
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    Routine trial
  LoopTerminator trials
  Routine finish
