PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trombone Champ Playtest
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent mario
      image [set every repeat] = $image_1
      size [set every repeat] = [xdim, ydim]
      startVal [time (s)] = 0.0
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    ImageComponent luigi
      image [set every repeat] = $image_2
      pos = (-.35, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.1, 'ydim': 0.1},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.2, 'ydim': 0.2},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.3, 'ydim': 0.3},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.4, 'ydim': 0.4},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.5, 'ydim': 0.5},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.6, 'ydim': 0.6},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.7, 'ydim': 0.7},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.8, 'ydim': 0.8},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 0.9, 'ydim': 0.9},
      {'aimage_1': 'images/Mario.jpg', 'aimage_2': 'images/Luigi.png', 'xdim': 1, 'ydim': 1}]
    Routine trial
  LoopTerminator trials
