PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = selectButton
  keyboardBackend = ioHub
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Routines
  Routine trial
    ButtonComponent button_1
      bold = True
      fillColor = darkgray
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0
      text = Button #1
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    ButtonComponent button_2
      bold = True
      fillColor = darkgray
      forceEndRoutine = False
      letterHeight = 0.05
      size = (0.35, 0.2)
      startVal [time (s)] = 0
      text = Button #2
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    ButtonComponent button_3
      bold = True
      fillColor = darkgray
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0
      text = Button #3
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    MouseComponent mouse
      clickable = button_1, button_2, button_3
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        def buttonSelector(selectedButton):
            for btn in buttons:
                if btn == selectedButton:
                    btn.fillColor = "orange"
                else:
                    btn.fillColor = "darkgray"
      Each Frame:
        if len(mouse.clicked_name):
            buttons = [button_1, button_2, button_3]

            currentButton = mouse.clicked_name[-1]
            for btn in buttons:
                if currentButton == btn.name:
                    currentButton = btn


            buttonSelector(currentButton)
Flow
  Routine trial
