PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        def dragOnly():
            click = bool(slider.mouse.getPressed()[0])
            xy = slider.mouse.getPos()

            if click:
                # Update current but don't set Rating (mouse is still down)
                # Dragging has to start inside a "valid" area (i.e., on the
                # slider), but may continue even if the mouse moves away from
                # the slider, as long as the mouse button is not released.
                if (slider.validArea.contains(slider.mouse, units=slider.units) and slider.markerPos is None):
                    slider.markerPos = slider._posToRating(xy)  # updates marker
                    slider._dragging = True
                elif (slider.marker.contains(slider.mouse, units=slider.units) or
                        slider._dragging):
                    slider.markerPos = slider._posToRating(xy)  # updates marker
                    slider._dragging = True
            else:  # mouse is up - check if it *just* came up
                if slider._dragging:
                    slider._dragging = False
                    if slider.markerPos is not None:
                        slider.recordRating(slider.markerPos)
                    return slider.markerPos
                else:
                    # is up and was already up - move along
                    return None

            slider._mouseStateXY = xy

        # Override slider method
        slider.getMouseResponses = dragOnly
Flow
  Routine trial
