PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Start10
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent categorical
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [condition] = $Slider_Type==1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent continuous
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [condition] = $Slider_Type==0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Condition:" + str(Condtion_Type) + "| Slider Type: " + str(Slider_Type)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [{'Condtion_Type': 1, 'Slider_Type': 0},
      {'Condtion_Type': 1, 'Slider_Type': 0},
      {'Condtion_Type': 1, 'Slider_Type': 0},
      {'Condtion_Type': 1, 'Slider_Type': 1},
      {'Condtion_Type': 1, 'Slider_Type': 1},
      {'Condtion_Type': 1, 'Slider_Type': 1},
      {'Condtion_Type': 2, 'Slider_Type': 0},
      {'Condtion_Type': 2, 'Slider_Type': 0},
      {'Condtion_Type': 2, 'Slider_Type': 0},
      {'Condtion_Type': 2, 'Slider_Type': 1},
      {'Condtion_Type': 2, 'Slider_Type': 1},
      {'Condtion_Type': 2, 'Slider_Type': 1}]
    Routine trial
  LoopTerminator trials
