PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = bd
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        numberOfWords = 0
        showWarning = False
      Each Frame:
        numberOfWords = len(textbox.text.split())
        text.text = numberOfWords

        if mouse.isPressedIn(nextButton):
            if numberOfWords > 5:
                continueRoutine = False
            else:
                showWarning = True
    TextboxComponent textbox
      bold = False
      borderColor = -1.0000, 1.0000, 1.0000
      editable = True
      letterHeight = 0.05
      pos = (0, 0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = asd
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    ButtonComponent nextButton
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent warning
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [condition] = $showWarning
      text = Please type up to 5 words.
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Flow
  Routine trial
